PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1000,800]
  expName = game
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Loading forces...
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    CodeComponent code_trial
      Code Type = Py
      Before Experiment:
        Base71Lookup = "0123456789abcdefghijklmnopqrstuvwxyzABCDEFGHIJKLMNOPQRSTUVWXYZ!$%&'()*+,-./:;<=>?@[\\]^_`{|}~"
      Begin Experiment:
        from psychopy import core
        import time
        import serial

        ser = serial.Serial("COM4",230400, timeout= 1)
      Begin Routine:
        ser.flush()

        strMsg = ""
        intCounter = 0
        strSerialData = ""

        output = ""
        outputlength = 0

        B0HighByte = 0
        B0LowByte = 0
        B0ForceInGrams = 0
        B0ForceInNewtons = 0

        B1HighByte = 0
        B1LowByte = 0
        B1ForceInGrams = 0
        B1ForceInNewtons = 0

        B2HighByte = 0
        B2LowByte = 0
        B2ForceInGrams = 0
        B2ForceInNewtons = 0

        B3HighByte = 0
        B3LowByte = 0
        B3ForceInGrams = 0
        B3ForceInNewtons = 0

        B4HighByte = 0
        B4LowByte = 0
        B4ForceInGrams = 0
        B4ForceInNewtons = 0
      Each Frame:
        if intCounter == 0:
            strMsg = ""
            strMsg += "BUT0 BUT1 BUT2 BUT3 BUT4 TTL\n"
            strMsg += "Base 71: 00 00 00 00 00 00\n"
            strMsg += "G: 0000 0000 0000 0000 0000 g\n"
            strMsg += "N: 0.0000 0.0000 0.0000 0.0000 0.0000 N\n"
            strMsg += "Sample: 0000\n"
            strMsg += "Press 'q' to quit.\n"

            feedback_text.text = strMsg
            win.flip()

        while intCounter < 1000:
            keys = event.getKeys()
            if keys:
                if keys[0] == 'q':  # Quit key (only works during samples)
                    ser.flush()
                    ser.write("X".encode())
                    ser.flush()
                    ser.close()
                    core.quit()

            intCounter = intCounter + 1
            strSerialData = ser.readline()

            strMsg = ""
            strMsg += "BUT0 BUT1 BUT2 BUT3 BUT4 TTL\n"

            output = strSerialData.decode()
            outputlength = len(output)

            if outputlength == 12:
                strMsg += "Base 71: " + output[0]
                strMsg += "" + output[1]
                strMsg += "" + output[2]
                strMsg += "" + output[3]
                strMsg += "" + output[4]
                strMsg += "" + output[5]
                strMsg += "" + output[6]
                strMsg += "" + output[7]
                strMsg += "" + output[8]
                strMsg += "" + output[9]
                strMsg += "" + output[10] + "\n\n"

                for i in range(71):
                    if Base71Lookup[i] == output[0]:
                        B0HighByte = i
                    if Base71Lookup[i] == output[2]:
                        B1HighByte = i
                    if Base71Lookup[i] == output[4]:
                        B2HighByte = i
                    if Base71Lookup[i] == output[6]:
                        B3HighByte = i
                    if Base71Lookup[i] == output[8]:
                        B4HighByte = i

                for i in range(71):
                    if Base71Lookup[i] == output[1]:
                        B0LowByte = i
                    if Base71Lookup[i] == output[3]:
                        B1LowByte = i
                    if Base71Lookup[i] == output[5]:
                        B2LowByte = i
                    if Base71Lookup[i] == output[7]:
                        B3LowByte = i
                    if Base71Lookup[i] == output[9]:
                        B4LowByte = i

                B4ForceInGrams = 0
                B4ForceInNewtons = 0
                B0ForceInGrams = ((B0HighByte * 71) + B0LowByte)
                B0ForceInNewtons = B0ForceInGrams * 0.0098
                B1ForceInGrams = ((B1HighByte * 71) + B1LowByte)
                B1ForceInNewtons = B1ForceInGrams * 0.0098
                B2ForceInGrams = ((B2HighByte * 71) + B2LowByte)
                B2ForceInNewtons = B2ForceInGrams * 0.0098
                B3ForceInGrams = ((B3HighByte * 71) + B3LowByte)
                B3ForceInNewtons = B3ForceInGrams * 0.0098
                B4ForceInGrams = ((B4HighByte * 71) + B4LowByte)
                B4ForceInNewtons = B4ForceInGrams * 0.0098

                TTL = output[10]

                strMsg += "G: {:04d} ".format(B0ForceInGrams)
                strMsg += "{:04d} ".format(B1ForceInGrams)
                strMsg += "{:04d} ".format(B2ForceInGrams)
                strMsg += "{:04d} ".format(B3ForceInGrams)
                strMsg += "{:04d} ".format(B4ForceInGrams)
                strMsg += TTL + "\n\n"

                strMsg += "N: {:0.4f} ".format(B0ForceInNewtons)
                strMsg += "{:0.4f} ".format(B1ForceInNewtons)
                strMsg += "{:0.4f} ".format(B2ForceInNewtons)
                strMsg += "{:0.4f} ".format(B3ForceInNewtons)
                strMsg += "{:0.4f} ".format(B4ForceInNewtons)
                strMsg += TTL + "\n\n"

                strMsg += "Sample: {:04d}\n\n".format(intCounter)
                strMsg += "Press 'q' to quit."

                feedback_text.text = strMsg

                ser.reset_input_buffer()  # This clears the serial buffer so it doesn't overfill. This means you will miss samples!
                win.flip()
      End Experiment:
        ser.flush()
        ser.write("X".encode())
        ser.flush()
        ser.close()
  Routine Load
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    TextComponent Loading
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Loading...
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  Routine MainMenu
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    TextComponent TitleText
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Main Menu
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    PolygonComponent start_button
      saveStartStop = False
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent StartGame
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Start Game
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    PolygonComponent exit_button
      pos = (0, -.3)
      saveStartStop = False
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent Exit
      letterHeight = 0.05
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Exit
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    PolygonComponent controller_selection
      pos = (0, -.1)
      saveStartStop = False
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent control_feedback
      letterHeight = 0.05
      pos = (0, -.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Controller
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    TextComponent mode_feedback
      letterHeight = 0.05
      pos = (0, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Mode: 
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    PolygonComponent mode_button
      pos = (0, -.2)
      saveStartStop = False
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        # Default control method
        # starts game in keyboard mode
        selected_control = "Keyboard"
        selected_diff = "1"
        thisExp.savePickle = False
        thisExp.saveWideText = False  # stops saving the .csv or .tsv file

        win_threshold = 10  # Percentage needed to win
      Begin Routine:
        # Update the feedback button text to display the currently selected control method
        control_feedback.text = f"Selected Control: {selected_control}"
        mode_feedback.text = f"Mode: {selected_diff}"
      Each Frame:
        # Check if the mouse is clicked and which button is clicked
        if mouse.isPressedIn(start_button):
            continueRoutine = False  # End MainMenu

        if mouse.isPressedIn(exit_button):  # Exit button
            core.quit()  # Quit the experiment

        if mouse.isPressedIn(controller_selection):
            # Add a delay to prevent rapid toggling (doesnt switch too fast)
            core.wait(0.2)

            # Toggle between "Keyboard" and "PSURP"
            if selected_control == "Keyboard":
                selected_control = "PSURP"
                ser.flush()
            else:
                selected_control = "Keyboard"

            # Update the feedback text
            control_feedback.text = f"Selected Control: {selected_control}"



        if mouse.isPressedIn(mode_button):
            # Add a delay to prevent rapid toggling (debounce)
            core.wait(0.2)

            # Toggle between "Easy (1)" and "Hard (2)" modes
            if selected_diff == "1":
                selected_diff = "2"
            else:
                selected_diff = "1"

            # Update the feedback text
            mode_feedback.text = f"Mode: {selected_diff}"
    MouseComponent mouse
      forceEndRoutineOnPress = correct click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine resetPSURP
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    TextComponent t_reset_PSURP
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = reseting PSURP
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    CodeComponent code_2
      Code Type = Py
      End Routine:
        """
        ser.flush()
        ser.write("X".encode())
        """
        # clear out the data from the IO buffers (Fresh commands)
        # the "X" command puts tje PSURP into command mode
  Routine TARE
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    TextComponent t_tare
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = loading each cell with 1 sec delay (5 seconds)
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    CodeComponent tare_code
      Code Type = Py
      End Routine:
        """
        ser.write("TAR0\n".encode())
        time.sleep(1)
        ser.write("TAR1\n".encode())
        time.sleep(1)
        ser.write("TAR2\n".encode())
        time.sleep(1)
        ser.write("TAR3\n".encode())
        time.sleep(1)
        ser.write("TAR4\n".encode())
        time.sleep(1)
        """

        # the tar command zeros out all of the force messurements
        # halt for one second to make sure command was processed
  Routine RUNE
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    TextComponent T_RUNE
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Entering streaming mode ...
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    CodeComponent Code_RUNE
      Code Type = Py
      End Routine:
        """
        ser.write("RUNE\n".encode())
        """
        # the rune command sets the PSURP to streaming mode. (for getting vals)
  Routine GameManager
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    CodeComponent GameManger
      Code Type = Py
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      Begin Experiment:
        # Initialize game variables
        current_level = 2
        score = 0
        trail_positions = []
        win_threshold = 1  # % needed to win
  Routine Level_1_checker
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    TextComponent end_score_text
      letterHeight = 0.05
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Score: 
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        import csv
        # Calculate the percentage
        if total_possible_vertices > 0:
            percentage = (total_touched_vertices / total_possible_vertices) * 100
        else:
            percentage = 0  # Avoid division by zero

        # Update the text for the end screen
        end_score_text.text = (
            f"You hit {total_touched_vertices} out of {total_possible_vertices} vertices\n"
            f"{percentage:.2f}%"
        )

        # Start 3 second timer
        end_screen_timer = core.CountdownTimer(3)
      Each Frame:
        # Keep showing the end screen until 3 seconds pass
        if end_screen_timer.getTime() <= 0:
            continueRoutine = False
      End Routine:
        total_touched_vertices = 0
        meatbone_collided = True

        thisExp.addData('Participant ID', expInfo['participant'])
        thisExp.addData('Session', expInfo['session'])
        thisExp.addData('Date', expInfo['date'])
        thisExp.addData('Score', total_touched_vertices)
        thisExp.addData('Percentage', percentage)

        filename = f"data/{expInfo['participant']}_summary.csv"
        with open(filename, mode='w', newline='') as file:
            writer = csv.writer(file)
            writer.writerow(['Participant ID', 'Session', 'Date', 'Score', 'Percentage'])
            writer.writerow([expInfo['participant'], expInfo['session'], expInfo['date'], total_touched_vertices, percentage])


        # Decide pass/fail and play correct sound
        if percentage >= win_threshold and meatbone_collided:
            Level_1_Loop.finished = True
            win_sound.play()
        else:
            Level_1_Loop.finished = False
            fail_sound.play()
    SoundComponent win_sound
      saveStartStop = False
      sound [set every repeat] = Assets/sounds/win.mp3
      stopWithRoutine = False
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    SoundComponent fail_sound
      saveStartStop = False
      sound [set every repeat] = Assets/sounds/lose.mp3
      stopWithRoutine = False
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  Routine Level_1
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    ImageComponent dino_image
      image = Assets/dino.png
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent floor1
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-.5,-.5)
      saveStartStop = False
      shape = rectangle
      size = (.5,0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent floor2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0,-.5)
      saveStartStop = False
      shape = rectangle
      size = (.5,0.3)
      startVal [time (s)] = 0.0
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    ImageComponent meatbone_image
      image = Assets/meat_bone.png
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent score_text
      letterHeight = 0.08
      pos = (0.55, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Score: 0
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    TextComponent timer_text
      letterHeight = 0.08
      pos = (-0.55,0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 00 : 00
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    CodeComponent DinoMovement
      Code Type = Py
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      Before Experiment:
        Base71Lookup = "0123456789abcdefghijklmnopqrstuvwxyzABCDEFGHIJKLMNOPQRSTUVWXYZ!$%&'()*+,-./:;<=>?@[\\]^_`{|}~"
      Begin Experiment:
        from psychopy.hardware import keyboard
        from psychopy.visual import Rect
        import time

        import serial
        from psychopy.visual import Circle

        # Initialize the Keyboard
        kb = keyboard.Keyboard()

        #PSURP Inits
        """
        # Initialize the serial connection for PSURP
        ser = serial.Serial("COM4", 230400, timeout=0.1)  # Replace "COM4" with your port
        ser.flush()
        ser.write("X".encode())  # Initialize PSURP
        ser.write("RUNE\n".encode())  # Enter streaming mode
        """

        # Trail settings
        trail_positions = []  # Stores Dino's previous positions
        trail_length = 35  # Maximum number of trail dots
        trail_dot_size = 0.005  # Size of each dot for trail
        trail_dots = []  # List of Circle stimuli for the trail
        trail_color = 'yellow'  # Color of the trail dots
        trail_frame_counter = 0  # Counter to control trail dot spawning
        trail_interval = 5  # Spawn a dot every 5 frames


        #Button 0 and button 2 force properties
        B0ForceInNewtons = 0
        B2ForceInNewtons = 0
        MIN_FORCE = 0.4  # Minimum force to start movement
        FORCE_MULTIPLIER = 0.001  # Adjust this to control how much force affects movement

        # Dino movement variables
        dino_pos = [0, -0.3]  # Starting position [x, y]
        dino_speed = 0  # Initial vertical speed
        gravity = -0.0003  # Downward acceleration 0.00006
        jump_speed = 0.005  # Jumping speed
        move_speed = 0.01  # Horizontal movement speed
        ground_offset = 0.03  # Offset to avoid sinking into the ground visually
        min_x = -0.6  # Left boundary
        max_x = 19 # right boundary
        respawn_position = [0, -0.3]  # Starting position for Dino



        # Floor properties

        floor1_vertices = floor1.vertices  # Get floor1 vertices
        floor_top = max(v[1] for v in floor1_vertices)  # Highest point of floor1
        fall_threshold = min(v[1] for v in floor1_vertices) - 0.2  # Slightly below the lowest floor point


        # Function to check if Dino is on the floor
        def is_on_floor(dino_pos):
            """Check if Dino's bottom is within the bounds of floor1 or floor2."""
            dino_bottom = dino_pos[1] - (dino_image.size[1] / 2)  # Dino's bottom Y-position

            # Floor1 bounds
            x_min1 = min(v[0] for v in floor1_vertices)
            x_max1 = max(v[0] for v in floor1_vertices)

            # Floor2 bounds
            x_min2 = min(v[0] for v in floor2_vertices)
            x_max2 = max(v[0] for v in floor2_vertices)

            # Check floor1 or floor2
            on_floor1 = x_min1 <= dino_pos[0] <= x_max1 and dino_bottom <= floor1_top
            on_floor2 = x_min2 <= dino_pos[0] <= x_max2 and dino_bottom <= floor2_top

            return on_floor1 or on_floor2

        #calculates the psurp forces
        def calculate_psurp_forces(serial_data):
            """Extract and calculate forces from PSURP serial data."""
            if len(serial_data.decode()) == 12:
                output = serial_data.decode()

                # Calculate forces
                B0HighByte = Base71Lookup.index(output[0])
                B0LowByte = Base71Lookup.index(output[1])
                B2HighByte = Base71Lookup.index(output[4])
                B2LowByte = Base71Lookup.index(output[5])

                # Forces in Newtons
                B0ForceInNewtons = ((B0HighByte * 71) + B0LowByte) * 0.0098
                B2ForceInNewtons = ((B2HighByte * 71) + B2LowByte) * 0.0098

                return B0ForceInNewtons, B2ForceInNewtons

            return 0, 0  # Default forces if data is invalid



        # image path for dino animation
        frame_paths = [
            "Assets/dino_frames/f1.png", "Assets/dino_frames/f2.png",
            "Assets/dino_frames/f3.png", "Assets/dino_frames/f4.png",
            "Assets/dino_frames/f5.png", "Assets/dino_frames/f6.png",
            "Assets/dino_frames/f7.png", "Assets/dino_frames/f8.png",
            "Assets/dino_frames/f9.png", "Assets/dino_frames/f10.png",
            "Assets/dino_frames/f11.png", "Assets/dino_frames/f12.png"
        ]



        frame_index = 0  # Start with the first frame
        frame_index_update_counter = 0  # Counter to manage animation speed
        total_frames = len(frame_paths)  # Total number of frames in the animation

        # Initialize the Dino's first frame
        dino_image.image = frame_paths[frame_index]
      Begin Routine:
        dino_pos = [0, -0.3]  # Reset Dino's position
        dino_speed = 0  # Reset vertical speed
        # Initialize the trail dots
        trail_dots = [
            Circle(win, radius=trail_dot_size, fillColor=trail_color, lineColor=None, pos=[-1, -1])
            for _ in range(trail_length)
        ]
      Each Frame:
        # Initialize key state flags
        left_pressed = False
        right_pressed = False
        up_pressed = False

        # Handle input based on the selected control method

        # Process keyboard input
        if selected_control == "Keyboard":
            keys_pressed = kb.getKeys(['left', 'right', 'up'], waitRelease=False, clear=False)
            for key in keys_pressed:
                if key.name == 'left':
                    left_pressed = True
                if key.name == 'right':
                    right_pressed = True
                if key.name == 'up':
                    up_pressed = True

        # Process PSURP input
        if selected_control == "PSURP":
            # Read serial data
            ser.flushInput()
            strSerialData = ser.readline()
            B0ForceInNewtons, B2ForceInNewtons = calculate_psurp_forces(strSerialData)

            # Apply difficulty-specific movement
            if selected_diff == "1":
                # Constant movement for Easy mode
                if B2ForceInNewtons > MIN_FORCE and dino_pos[0] < max_x:
                    dino_pos[0] += 0.005  # Constant movement speed (adjust as needed)
                    dino_image.size = [abs(dino_image.size[0]), dino_image.size[1]]  # Face right

            elif selected_diff == "2":
                # Proportional movement for Hard mode (current implementation)
                if B2ForceInNewtons > MIN_FORCE and dino_pos[0] < max_x:
                    move_amount = B2ForceInNewtons * FORCE_MULTIPLIER
                    dino_pos[0] += move_amount  # Movement based on force
                    dino_image.size = [abs(dino_image.size[0]), dino_image.size[1]]  # Face right

            # Jump logic remains the same for both difficulties
            if B0ForceInNewtons > MIN_FORCE:
                dino_speed = B0ForceInNewtons * FORCE_MULTIPLIER  # Jump height based on force




        # Apply gravity to Dino's vertical speed
        dino_speed += gravity

        # Check if Dino is on the floor (keeps dino on top of floor)
        if is_on_floor(dino_pos) and dino_speed <= 0:  # Falling or stationary
            dino_pos[1] = floor1_top + (dino_image.size[1] / 2) - ground_offset  # Align Dino with the floor
            dino_speed = 0  # Reset vertical speed

        # Respawn if Dino falls below the floor threshold
        if dino_pos[1] < fall_threshold:
            lose_sound.play()
            continueRoutine = False  # Stop the MainGame routine

        # Jumping logic: Allow jump whenever the 'up' key is pressed
        if up_pressed:  # Check if the up key is pressed
            dino_speed = jump_speed  # Apply upward movement

        # Update Dino's vertical position
        dino_pos[1] += dino_speed

        # Continuous horizontal movement
        if left_pressed and dino_pos[0] > min_x:
            dino_pos[0] -= move_speed  # Move Dino to the left
            dino_image.size = [-1 * abs(dino_image.size[0]), dino_image.size[1]]

        if right_pressed and dino_pos[0] < max_x:
            dino_pos[0] += move_speed  # Move Dino to the right
            dino_image.size = [abs(dino_image.size[0]), dino_image.size[1]]  # Reset Dino to face right

        # Update Dino's position
        # dino_image.pos = dino_pos  # Use both X and Y values of dino_pos
        dino_image.pos = [dino_pos[0] - camera_offset_x, dino_pos[1]]

        # Increment the frame counter for trail updates
        trail_frame_counter += 1

        # Check if it's time to spawn a new dot
        if trail_frame_counter >= trail_interval:
            if len(trail_positions) >= trail_length:
                trail_positions.pop(0)  # Remove the oldest position if trail is full

            # Add Dino's current position to the trail
            trail_positions.append(dino_pos[:])  # Add a copy of Dino's current position

            trail_frame_counter = 0  # Reset the counter

        # Update the trail dots' positions
        for i, pos in enumerate(trail_positions):
            trail_dots[i].pos = [pos[0] - camera_offset_x, pos[1]]  # Adjust for camera offset


        # Update the Dino's animation
        if (frame_index_update_counter % 4) == 0:  # Adjust 4 to control animation speed
            dino_image.image = frame_paths[frame_index]  # Update the current frame

            # Advance to the next frame
            frame_index += 1
            if frame_index >= total_frames:
                frame_index = 0  # Loop back to the first frame



        # Increment the animation frame counter
        frame_index_update_counter += 1
      End Experiment:
        """
        ser.flush()
        ser.write("X".encode())  # Exit command mode
        ser.close()
        """
      End Routine:
        dino_pos = [-0.5, -0.3]  # Reset Dino's position
        trail_positions.clear()  # Remove all stored positions
    CodeComponent worldController
      Code Type = Py
      Begin Experiment:
        from psychopy.visual import Rect, ImageStim, ShapeStim
        import math

        dirt_texture = 'Assets/ground1.png'

        #height factors for arcs (Y position)
        low_arc = -0.2
        reg_arc = 0
        high_arc = 0.05

        small_arc_size = 0.2  # Smallest arc radius
        med_arc_size = 0.27  # Medium arc radius
        large_arc_size = 0.35  # Largest arc radius

        wiggle_thickness = 0.05  # Adjust thickness for all wiggle arcs

        meatbone_size = [0.15, 0.09]  # Example size (width, height)


        # Function to calculate vertices of a Rect stimulus
        def calculate_rect_vertices(rect):
            """Calculate the vertices of a Rect stimulus."""
            half_width = rect.width / 2
            half_height = rect.height / 2
            center_x, center_y = rect.pos
            vertices = [
                [center_x - half_width, center_y - half_height],  # Bottom-left
                [center_x + half_width, center_y - half_height],  # Bottom-right
                [center_x + half_width, center_y + half_height],  # Top-right
                [center_x - half_width, center_y + half_height],  # Top-left
            ]
            return vertices

        # Camera variables
        camera_offset_x = 0  # Tracks the camera offset to follow Dino
        camera_speed = 0.003  # Adjust this speed as needed 0.003
        # Background properties
        background_width = 2.0  # Width of a single background image
        background_height = 1.0
        background_image = 'Assets/7.png'  # Path to your custom background image

        # Create two background images for seamless scrolling
        background1 = ImageStim(win, image=background_image, size=[background_width, background_height], pos=[0, 0])
        background2 = ImageStim(win, image=background_image, size=[background_width, background_height], pos=[background_width, 0])

        # Floor1 properties
        floor1_height = 0.3
        floor1_width = 0.5
        floor1_pos = [0, -0.5]

        floor1 = visual.ImageStim(
            win=win,
            image=dirt_texture,
            size=(floor1_width, floor1_height),  # Set the size to match the floor dimensions
            pos=floor1_pos,
            interpolate=True
        )
        floor1_vertices = calculate_rect_vertices(floor1)

        # Floor2 properties - Place it further into the map
        floor2_x_static = 1  # Fixed X position where floor2 appears18.5
        floor2_height = 0.3
        floor2_width = 0.5

        floor2 = visual.ImageStim(
            win=win,
            image=dirt_texture,
            size=(floor2_width, floor2_height),  # Set the size to match the floor dimensions
            pos=[floor2_x_static, -0.5],  # Position of floor2
            interpolate=True
        )
        floor2_vertices = calculate_rect_vertices(floor2)


        # Floor thresholds
        floor1_top = max(v[1] for v in floor1_vertices)
        floor2_top = max(v[1] for v in floor2_vertices)



        #meat bone

        meatbone_size = [0.12, 0.06]  # Example size (width, height)
        meatbone_image.size = meatbone_size
        offset = 0.01  # Adjust to align the meatbone properly with floor2


        #arc stuff

        # Arc 1 Properties
        arc1_x = 0.3
        arc1_center = [arc1_x, reg_arc]
        arc1_radius = small_arc_size
        arc1_start_angle = 0
        arc1_end_angle = 180

        # Arc 2 Properties
        arc2_x = 1.0
        arc2_center = [arc2_x, low_arc]
        arc2_radius = med_arc_size
        arc2_start_angle = 0
        arc2_end_angle = 180

        # Arc 3 Properties
        arc3_x = 2.2
        arc3_center = [arc3_x, high_arc]
        arc3_radius = large_arc_size
        arc3_start_angle = 0
        arc3_end_angle = 180

        # Arc 4 Properties
        arc4_x = 3.4
        arc4_center = [arc4_x, low_arc]
        arc4_radius = small_arc_size
        arc4_start_angle = 0
        arc4_end_angle = 180

        # Arc 5 Properties
        arc5_x = 4.6
        arc5_center = [arc5_x, reg_arc]
        arc5_radius = large_arc_size
        arc5_start_angle = 0
        arc5_end_angle = 180

        # Arc 6 Properties
        arc6_x = 5.8
        arc6_center = [arc6_x, high_arc]
        arc6_radius = med_arc_size
        arc6_start_angle = 0
        arc6_end_angle = 180

        # Arc 7 Properties
        arc7_x = 7.0
        arc7_center = [arc7_x, low_arc]
        arc7_radius = large_arc_size
        arc7_start_angle = 0
        arc7_end_angle = 180

        # Arc 8 Properties
        arc8_x = 8.5
        arc8_center = [arc8_x, high_arc]
        arc8_radius = med_arc_size
        arc8_start_angle = 0
        arc8_end_angle = 180




        # Generate vertices for Arc 1
        arc1_vertices = []
        for i in range(51):  # 50 segments for smoothness
            angle = math.radians(arc1_start_angle + i * (arc1_end_angle - arc1_start_angle) / 50)
            x = arc1_center[0] + arc1_radius * math.cos(angle)
            y = arc1_center[1] + arc1_radius * math.sin(angle)
            arc1_vertices.append((x, y))

        # Generate vertices for Arc 2
        arc2_vertices = []
        for i in range(51):  # 50 segments for smoothness
            angle = math.radians(arc2_start_angle + i * (arc2_end_angle - arc2_start_angle) / 50)
            x = arc2_center[0] + arc2_radius * math.cos(angle)
            y = arc2_center[1] + arc2_radius * math.sin(angle)
            arc2_vertices.append((x, y))



        # Generate vertices for Arc 3
        arc3_vertices = []
        for i in range(51):  # 50 segments for smoothness
            angle = math.radians(arc3_start_angle + i * (arc3_end_angle - arc3_start_angle) / 50)
            x = arc3_center[0] + arc3_radius * math.cos(angle)
            y = arc3_center[1] + arc3_radius * math.sin(angle)
            arc3_vertices.append((x, y))

        # Generate vertices for Arc 4
        arc4_vertices = []
        for i in range(51):  # 50 segments for smoothness
            angle = math.radians(arc4_start_angle + i * (arc4_end_angle - arc4_start_angle) / 50)
            x = arc4_center[0] + arc4_radius * math.cos(angle)
            y = arc4_center[1] + arc4_radius * math.sin(angle)
            arc4_vertices.append((x, y))


        # Generate vertices for Arc 5
        arc5_vertices = []
        for i in range(51):  # 50 segments for smoothness
            angle = math.radians(arc5_start_angle + i * (arc5_end_angle - arc5_start_angle) / 50)
            x = arc5_center[0] + arc5_radius * math.cos(angle)
            y = arc5_center[1] + arc5_radius * math.sin(angle)
            arc5_vertices.append((x, y))


        arc6_vertices = []
        for i in range(51):
            angle = math.radians(arc6_start_angle + i * (arc6_end_angle - arc6_start_angle) / 50)
            x = arc6_center[0] + arc6_radius * math.cos(angle)
            y = arc6_center[1] + arc6_radius * math.sin(angle)
            arc6_vertices.append((x, y))

        # Arc 7 vertices
        arc7_vertices = []
        for i in range(51):
            angle = math.radians(arc7_start_angle + i * (arc7_end_angle - arc7_start_angle) / 50)
            x = arc7_center[0] + arc7_radius * math.cos(angle)
            y = arc7_center[1] + arc7_radius * math.sin(angle)
            arc7_vertices.append((x, y))

        # Arc 8 vertices
        arc8_vertices = []
        for i in range(51):
            angle = math.radians(arc8_start_angle + i * (arc8_end_angle - arc8_start_angle) / 50)
            x = arc8_center[0] + arc8_radius * math.cos(angle)
            y = arc8_center[1] + arc8_radius * math.sin(angle)
            arc8_vertices.append((x, y))

        # Create the arc ShapeStim
        arc1 = ShapeStim(
            win=win,
            vertices=arc1_vertices,
            closeShape=False,
            lineWidth=4,
            lineColor='white',
            fillColor=None
        )

        # Create Arc 2 ShapeStim
        arc2 = ShapeStim(
            win=win,
            vertices=arc2_vertices,
            closeShape=False,
            lineWidth=4,
            lineColor='white',  # Different color for clarity
            fillColor=None
        )


        # Create Arc 3 ShapeStim
        arc3 = ShapeStim(
            win=win,
            vertices=arc3_vertices,
            closeShape=False,
            lineWidth=4,
            lineColor='white',  # Set color as desired
            fillColor=None
        )


        # Create Arc 4 ShapeStim
        arc4 = ShapeStim(
            win=win,
            vertices=arc4_vertices,
            closeShape=False,
            lineWidth=4,
            lineColor='white',  # Set color as desired
            fillColor=None
        )


        # Create Arc 5 ShapeStim
        arc5 = ShapeStim(
            win=win,
            vertices=arc5_vertices,
            closeShape=False,
            lineWidth=4,
            lineColor='white',  # Set color as desired
            fillColor=None
        )


        arc6 = ShapeStim(
            win=win,
            vertices=arc6_vertices,
            closeShape=False,
            lineWidth=4,
            lineColor='white',
            fillColor=None
        )

        arc7 = ShapeStim(
            win=win,
            vertices=arc7_vertices,
            closeShape=False,
            lineWidth=4,
            lineColor='white',
            fillColor=None
        )

        arc8 = ShapeStim(
            win=win,
            vertices=arc8_vertices,
            closeShape=False,
            lineWidth=4,
            lineColor='white',
            fillColor=None
        )

        def create_wiggle_arc(center, radius, thickness, color='blue', opacity=0.5):
            """Generate a thick wiggle room arc for a given arc."""
            outer_arc_vertices = []
            inner_arc_vertices = []

            for i in range(51):  # 50 segments for smoothness
                angle = math.radians(i * (180 / 50))  # Same angles as original arc

                # Outer arc (slightly larger)
                outer_x = center[0] + (radius + thickness) * math.cos(angle)
                outer_y = center[1] + (radius + thickness) * math.sin(angle)
                outer_arc_vertices.append((outer_x, outer_y))

                # Inner arc (slightly smaller)
                inner_x = center[0] + (radius - thickness) * math.cos(angle)
                inner_y = center[1] + (radius - thickness) * math.sin(angle)
                inner_arc_vertices.append((inner_x, inner_y))

            # Reverse inner arc vertices to create a closed shape
            inner_arc_vertices.reverse()
            thick_wiggle_arc_vertices = outer_arc_vertices + inner_arc_vertices

            # Create and return the wiggle room arc
            return ShapeStim(
                win=win,
                vertices=thick_wiggle_arc_vertices,
                closeShape=True,  # Fill between outer and inner arcs
                lineWidth=0,  # No outline needed
                lineColor=None,
                fillColor=color,
                opacity=opacity
            )


        # Generate wiggle arcs for all arcs
        wiggle_arc1 = create_wiggle_arc(arc1_center, arc1_radius, wiggle_thickness)
        wiggle_arc2 = create_wiggle_arc(arc2_center, arc2_radius, wiggle_thickness)
        wiggle_arc3 = create_wiggle_arc(arc3_center, arc3_radius, wiggle_thickness)
        wiggle_arc4 = create_wiggle_arc(arc4_center, arc4_radius, wiggle_thickness)
        wiggle_arc5 = create_wiggle_arc(arc5_center, arc5_radius, wiggle_thickness)
        wiggle_arc6 = create_wiggle_arc(arc6_center, arc6_radius, wiggle_thickness)
        wiggle_arc7 = create_wiggle_arc(arc7_center, arc7_radius, wiggle_thickness)
        wiggle_arc8 = create_wiggle_arc(arc8_center, arc8_radius, wiggle_thickness)
      Begin Routine:
        camera_offset_x = 0
      Each Frame:
        # Update the camera offset based on Dino's X position
        camera_offset_x += camera_speed  # The camera offset follows Dino's position

        # Move backgrounds relative to Dino's position (seamless wrap-around)
        background1.pos = [-(camera_offset_x % background_width), 0]
        background2.pos = [background1.pos[0] + background_width, 0]

        # Update floor positions relative to Dino's position
        floor1.pos = [floor1_pos[0] - camera_offset_x, floor1.pos[1]]
        floor2.pos = [floor2_x_static - camera_offset_x, floor2.pos[1]]  # Floor2 moves with Dino


        # Update meatbone position to match floor2's top
        meatbone_x = floor2.pos[0]  # Update X position based on floor2
        meatbone_y = floor2_top + (meatbone_size[1] / 2) - offset  # Keep the meatbone on top of floor2
        meatbone_image.pos = [meatbone_x, meatbone_y]


        # Update the arc position relative to the camera offset
        # Update Arc 1 Position
        arc1.pos = [arc1_center[0] - camera_offset_x, arc1_center[1]]
        wiggle_arc1.pos = arc1.pos  # Keep wiggle room on top

        # Update Arc 2 Position
        arc2.pos = [arc2_center[0] - camera_offset_x, arc2_center[1]]
        wiggle_arc2.pos = arc2.pos  # Keep wiggle room on top
        arc3.pos = [arc3_center[0] - camera_offset_x, arc3_center[1]]
        wiggle_arc3.pos = arc3.pos  # Keep wiggle room on top
        # Update Arc 4 Position
        arc4.pos = [arc4_center[0] - camera_offset_x, arc4_center[1]]
        wiggle_arc4.pos = arc4.pos  # Keep wiggle room on top
        # Update Arc 5 Position
        arc5.pos = [arc5_center[0] - camera_offset_x, arc5_center[1]]
        wiggle_arc5.pos = arc5.pos  # Keep wiggle room on top

        arc6.pos = [arc6_center[0] - camera_offset_x, arc6_center[1]]
        wiggle_arc6.pos = arc6.pos

        # Update Arc 7 Position
        arc7.pos = [arc7_center[0] - camera_offset_x, arc7_center[1]]
        wiggle_arc7.pos = arc7.pos

        # Update Arc 8 Position
        arc8.pos = [arc8_center[0] - camera_offset_x, arc8_center[1]]
        wiggle_arc8.pos = arc8.pos



        # Draw the backgrounds and floors
        background1.draw()
        background2.draw()
        floor1.draw()
        floor2.draw()
        wiggle_arc1.draw()
        wiggle_arc2.draw()
        wiggle_arc3.draw()
        wiggle_arc4.draw()
        wiggle_arc5.draw()
        wiggle_arc6.draw()
        wiggle_arc7.draw()
        wiggle_arc8.draw()


        arc1.draw()
        arc2.draw()
        arc3.draw()
        arc4.draw()
        arc5.draw()
        arc6.draw()
        arc7.draw()
        arc8.draw()

        # Draw the trail dots
        for dot in trail_dots:
            dot.draw()
    CodeComponent GoalController
      Code Type = Py
      Begin Experiment:
        meatbone_collided = False  # Track whether the meatbone has been stomped
        arc1_touched_vertices = []
        arc2_touched_vertices = []
        arc3_touched_vertices = []
        arc4_touched_vertices = []
        arc5_touched_vertices = []
        arc6_touched_vertices = []
        arc7_touched_vertices = []
        arc8_touched_vertices = []

        touch_threshold = 0.04 # touch threshold for the arcs

        meat_collision_threshold = 0.1  # You can adjust this to fit your game scale


        # Track if Dino is in the wiggle room defualt is not touching so false
        wiggle_room = False
      Begin Routine:
        score = 0  # Reset the score
        arc1_touched_vertices = []
        arc2_touched_vertices = []
        arc3_touched_vertices = []
        arc4_touched_vertices = []
        arc5_touched_vertices = []
        meatbone_collided = False
        meatbone_image.opacity = 1

        wiggle_room = False
      Each Frame:
        dino_relative_x = dino_pos[0] - camera_offset_x
        dino_relative_y = dino_pos[1]
        # Check for collision based on proximity to the updated position
        dx = dino_relative_x - meatbone_x
        dy = dino_relative_y - meatbone_y

        if camera_offset_x >= max_x:
            lose_sound.play()
            continueRoutine = False  # Ends the current routine

        if dino_relative_x < -0.8 or dino_relative_x > 0.8:  # Adjust bounds based on screen width
            lose_sound.play()
            continueRoutine = False  # Ends the current routine

        # Check for collision for meatbone
        if not meatbone_collided and (dx ** 2 + dy ** 2) ** 0.5 <= meat_collision_threshold:
            print("Dino ate the meatbone!")
            meatbone_image.opacity = 0  # Make the meatbone disappear
            meatbone_collided = True  # Prevent further collision checks
            eat_sound.play()
            continueRoutine = False

        # Check for collision for ARCS
        for vertex in arc1_vertices:
            # Adjust Arc 1 vertex for its X-offset (+1)
            adjusted_vertex_x = vertex[0] + arc1_x   # Move Arc 1 vertices by 1 unit to the right
            adjusted_vertex_y = vertex[1] + reg_arc # Y remains unchanged, apply the same adjustment as Arc 2 if needed

            # Calculate distance between Dino and the adjusted vertex of Arc 1
            distance = ((dino_pos[0] - adjusted_vertex_x) ** 2 + (dino_pos[1] - adjusted_vertex_y) ** 2) ** 0.5

            # Check if Dino is close enough to "touch" the adjusted vertex
            if distance <= touch_threshold and vertex not in arc1_touched_vertices:
                arc1_touched_vertices.append(vertex)
                score += 1  # Increment the score for Arc 1


        for vertex in arc2_vertices:
            # Adjust Arc 2 vertex for its X-offset (+2)
            adjusted_vertex_x = vertex[0] + arc2_x   # Move Arc 2 vertices by 2 units to the right
            adjusted_vertex_y = vertex[1] + low_arc # Y remains unchanged

            # Calculate distance between Dino and the adjusted vertex of Arc 2
            distance = ((dino_pos[0] - adjusted_vertex_x) ** 2 + (dino_pos[1] - adjusted_vertex_y) ** 2) ** 0.5

            # Check if Dino is close enough to "touch" the adjusted vertex
            if distance <= touch_threshold and vertex not in arc2_touched_vertices:
                arc2_touched_vertices.append(vertex)
                score += 1  # Increment the score for Arc 2


        for vertex in arc3_vertices:
            # Adjust Arc 3 vertex for its static X-offset
            adjusted_vertex_x = vertex[0] + arc3_x   # Offset Arc 3 vertices by 3.5 units to the right
            adjusted_vertex_y = vertex[1] + high_arc  # Offset Arc 3 vertices by -0.2 units vertically

            # Calculate distance between Dino and the adjusted vertex of Arc 3
            distance = ((dino_pos[0] - adjusted_vertex_x) ** 2 + (dino_pos[1] - adjusted_vertex_y) ** 2) ** 0.5

            # Check if Dino is close enough to "touch" the adjusted vertex
            if distance <= touch_threshold and vertex not in arc3_touched_vertices:
                arc3_touched_vertices.append(vertex)
                score += 1  # Increment the score for Arc 3

        for vertex in arc4_vertices:
            adjusted_vertex_x = vertex[0] + arc4_x   # Offset Arc 4 vertices
            adjusted_vertex_y = vertex[1] + low_arc  # Y position remains the same

            # Calculate distance between Dino and Arc 4
            distance = ((dino_pos[0] - adjusted_vertex_x) ** 2 + (dino_pos[1] - adjusted_vertex_y) ** 2) ** 0.5

            # If Dino is close enough, count as a touch
            if distance <= touch_threshold and vertex not in arc4_touched_vertices:
                arc4_touched_vertices.append(vertex)
                score += 1  # Increment score

        for vertex in arc5_vertices:
            adjusted_vertex_x = vertex[0] + arc5_x   # Offset Arc 5 vertices
            adjusted_vertex_y = vertex[1] + reg_arc  # Y position remains the same

            # Calculate distance between Dino and Arc 5
            distance = ((dino_pos[0] - adjusted_vertex_x) ** 2 + (dino_pos[1] - adjusted_vertex_y) ** 2) ** 0.5

            # If Dino is close enough, count as a touch
            if distance <= touch_threshold and vertex not in arc5_touched_vertices:
                arc5_touched_vertices.append(vertex)
                score += 1  # Increment score

        for vertex in arc6_vertices:
            adjusted_vertex_x = vertex[0] + arc6_x
            adjusted_vertex_y = vertex[1] + high_arc
            distance = ((dino_pos[0] - adjusted_vertex_x) ** 2 + (dino_pos[1] - adjusted_vertex_y) ** 2) ** 0.5
            if distance <= touch_threshold and vertex not in arc6_touched_vertices:
                arc6_touched_vertices.append(vertex)
                score += 1

        # Arc 7 touch detection
        for vertex in arc7_vertices:
            adjusted_vertex_x = vertex[0] + arc7_x
            adjusted_vertex_y = vertex[1] + arc7_center[1]
            distance = ((dino_pos[0] - adjusted_vertex_x) ** 2 + (dino_pos[1] - adjusted_vertex_y) ** 2) ** 0.5
            if distance <= touch_threshold and vertex not in arc7_touched_vertices:
                arc7_touched_vertices.append(vertex)
                score += 1

        # Arc 8 touch detection
        for vertex in arc8_vertices:
            adjusted_vertex_x = vertex[0] + arc8_x
            adjusted_vertex_y = vertex[1] + arc8_center[1]
            distance = ((dino_pos[0] - adjusted_vertex_x) ** 2 + (dino_pos[1] - adjusted_vertex_y) ** 2) ** 0.5
            if distance <= touch_threshold and vertex not in arc8_touched_vertices:
                arc8_touched_vertices.append(vertex)
                score += 1

        # WIGGLE ROOM STUFF


        # Reset to false at the start of each frame
        wiggle_room = False
        for vertex in wiggle_arc1.vertices:
            adjusted_vertex_x = vertex[0] + arc1_x
            adjusted_vertex_y = vertex[1] + reg_arc

            # Calculate distance between Dino and wiggle room vertex
            distance = ((dino_pos[0] - adjusted_vertex_x) ** 2 + (dino_pos[1] - adjusted_vertex_y) ** 2) ** 0.5

            # If Dino is inside the wiggle room, set to False
            if distance <= touch_threshold:
                wiggle_room = True
                break  # No need to check further, Dino is inside


        for vertex in wiggle_arc2.vertices:
            adjusted_vertex_x = vertex[0] + arc2_x
            adjusted_vertex_y = vertex[1] + low_arc

            # Calculate distance between Dino and wiggle room vertex
            distance = ((dino_pos[0] - adjusted_vertex_x) ** 2 + (dino_pos[1] - adjusted_vertex_y) ** 2) ** 0.5

            # If Dino is inside the wiggle room, set to False
            if distance <= touch_threshold:
                wiggle_room = True
                break  # No need to check further, Dino is inside



        for vertex in wiggle_arc3.vertices:
            adjusted_vertex_x = vertex[0] + arc3_x
            adjusted_vertex_y = vertex[1] + high_arc

            # Calculate distance between Dino and wiggle room vertex
            distance = ((dino_pos[0] - adjusted_vertex_x) ** 2 + (dino_pos[1] - adjusted_vertex_y) ** 2) ** 0.5

            # If Dino is inside the wiggle room, set to False
            if distance <= touch_threshold:
                wiggle_room = True
                break  # No need to check further, Dino is inside


        for vertex in wiggle_arc4.vertices:
            adjusted_vertex_x = vertex[0] + arc4_x   # Offset Arc 4 vertices
            adjusted_vertex_y = vertex[1] + low_arc

            # Calculate distance between Dino and wiggle room vertex
            distance = ((dino_pos[0] - adjusted_vertex_x) ** 2 + (dino_pos[1] - adjusted_vertex_y) ** 2) ** 0.5

            # If Dino is inside the wiggle room, mark as safe
            if distance <= touch_threshold:
                wiggle_room = True
                break  # Stop checking once inside


        for vertex in wiggle_arc5.vertices:
            adjusted_vertex_x = vertex[0] + arc5_x   # Offset Arc 5 vertices
            adjusted_vertex_y = vertex[1] + reg_arc

            # Calculate distance between Dino and wiggle room vertex
            distance = ((dino_pos[0] - adjusted_vertex_x) ** 2 + (dino_pos[1] - adjusted_vertex_y) ** 2) ** 0.5

            # If Dino is inside the wiggle room, mark as safe
            if distance <= touch_threshold:
                wiggle_room = True
                break  # Stop checking once inside

        for vertex in wiggle_arc6.vertices:
            adjusted_vertex_x = vertex[0] + arc6_x
            adjusted_vertex_y = vertex[1] + high_arc
            distance = ((dino_pos[0] - adjusted_vertex_x) ** 2 + (dino_pos[1] - adjusted_vertex_y) ** 2) ** 0.5
            if distance <= touch_threshold:
                wiggle_room = True
                break
        # Arc 7 wiggle room
        for vertex in wiggle_arc7.vertices:
            adjusted_vertex_x = vertex[0] + arc7_x
            adjusted_vertex_y = vertex[1] + arc7_center[1]
            distance = ((dino_pos[0] - adjusted_vertex_x) ** 2 + (dino_pos[1] - adjusted_vertex_y) ** 2) ** 0.5
            if distance <= touch_threshold:
                wiggle_room = True
                break

        # Arc 8 wiggle room
        for vertex in wiggle_arc8.vertices:
            adjusted_vertex_x = vertex[0] + arc8_x
            adjusted_vertex_y = vertex[1] + arc8_center[1]
            distance = ((dino_pos[0] - adjusted_vertex_x) ** 2 + (dino_pos[1] - adjusted_vertex_y) ** 2) ** 0.5
            if distance <= touch_threshold:
                wiggle_room = True
                break



        score_text.text = str(score) # update Score
      End Routine:
        global total_touched_vertices, total_possible_vertices
        total_touched_vertices = (
            len(arc1_touched_vertices) + len(arc2_touched_vertices) + len(arc3_touched_vertices) +
            len(arc4_touched_vertices) + len(arc5_touched_vertices) + len(arc6_touched_vertices) +
            len(arc7_touched_vertices) + len(arc8_touched_vertices)
        )

        total_possible_vertices = (
            len(arc1_vertices) + len(arc2_vertices) + len(arc3_vertices) +
            len(arc4_vertices) + len(arc5_vertices) + len(arc6_vertices) +
            len(arc7_vertices) + len(arc8_vertices)
        )

        score = 0
    CodeComponent Timer
      Code Type = Py
      Begin Experiment:
        level_timer = core.Clock()  # Initialize the timer
        time_limit = 120  # Set the time limit in seconds (2 minutes)
      Begin Routine:
        level_timer.reset()  # Reset the timer at the start of the MainGame routine
      Each Frame:
        # Calculate remaining time
        time_remaining = time_limit - level_timer.getTime()

        # Check if time is up
        if time_remaining <= 0:
            print("Time's up! Returning to MainMenu.")
            continueRoutine = False  # End the MainGame routine
            time_remaining = 0  # Prevent negative time display

        # Format the timer as MM:SS
        minutes = int(time_remaining) // 60
        seconds = int(time_remaining) % 60

        # Update the timer display
        timer_text.text = str(f"{minutes}:{seconds:02d}")
    SoundComponent lose_sound
      saveStartStop = False
      sound [set every repeat] = Assets/sounds/lose.mp3
      stopWithRoutine = False
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    SoundComponent eat_sound
      saveStartStop = False
      sound [set every repeat] = Assets/sounds/eat.mp3
      stopWithRoutine = False
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  Routine Level_2
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = level2 2
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Flow
  Routine resetPSURP
  Routine TARE
  Routine RUNE
  LoopInitiator GameLoop loopType="TrialHandler"
    loopType = random
    nReps = 999
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    Routine MainMenu
    LoopInitiator Level_1_Loop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 1000
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      Routine Level_1
      Routine Level_1_checker
    LoopTerminator Level_1_Loop
    Routine Level_2
  LoopTerminator GameLoop
